<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COMx</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ConfigureSpeaker</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>DO0</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePwmDutyCycleDO0Payload">
                      <beh:PwmDutyCycleDO0>50</beh:PwmDutyCycleDO0>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseDO0Payload">
                      <beh:PulseDO0>200</beh:PulseDO0>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>SpeakerFeedback</rx:Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it ? 500 : 100</scr:Expression>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PwmFrequencyDO0" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>DO0</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="OutputPin" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LedControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="OutputPin" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="beh:CreateOutputSetPayload,beh:DigitalOutputs">
                    <MemberName>OutputSet</MemberName>
                    <Value>DOPort0</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>OutputPin</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LedState</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OutputPin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OutputSet" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>None</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OutputPin</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OutputClear" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                      <beh:OutputClear>None</beh:OutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>LedState</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PokeInput" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PokeControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PokeInput</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PokeState</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="PokeInput" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="WorkflowProperty(beh:DigitalInputs),beh:DigitalInputs">
                    <MemberName>Value</MemberName>
                    <Value>DIPort0</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>PokeInput</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" DisplayName="MinITI" />
              <Property Name="Upper" DisplayName="MaxITI" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>RandomWait</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>5</p1:Lower>
                      <p1:Upper>10</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>ToSeconds</scr:Name>
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LedState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedOutputSet" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>OutputPin</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalOutputs">
                            <Value>None</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="12" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ChoiceDeadline" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>WaitForPoke</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LightOnTimestamp</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="ChoiceDeadline" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT10S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>NaN</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PokeState</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsBroken</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LightOnTimestamp</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>TurnOffLed</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LedState</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Feedback</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>TriggerSpeaker</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>double.IsNaN(it.Item2)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>SpeakerFeedback</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="rx:Condition">
                    <Name>Fail</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>IsNaN</scr:Name>
                          <scr:Expression>double.IsNaN(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>Failed trial!</Format>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Sucess</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>IsNaN</scr:Name>
                          <scr:Expression>double.IsNaN(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>Correct trial! RxTime = {0}</Format>
                    <Selector />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(it.Item1 as OutcomeMessage, It.Item2 as RxTime)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="2" To="9" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Outcome</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Outcome</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>OutcomeMessage</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Name" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>TrialOutCome</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>LedState</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Checked" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LedState</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CreateLabel</scr:Name>
              <scr:Expression>it ? "LedOn" : "LedOff"</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:RadioButtonBuilder">
              <gui:Name>LedState</gui:Name>
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
              <gui:Checked>false</gui:Checked>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Panel</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 24pt</gui:Font>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="12" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>